includeFile = scoring_dose.txt
includeFile = scoring_phasespace.txt

# -- Current Scorer

# Current Electron X Fine
s:Sc/velCurrElXFine/Quantity = "velocityCurrent"
s:Sc/velCurrElXFine/Component = "WaterGridFine"
i:Sc/velCurrElXFine/XBins = Par/FineXBins
i:Sc/velCurrElXFine/YBins = Par/FineYBins
i:Sc/velCurrElXFine/ZBins = Par/FineZBins
b:Sc/velCurrElXFine/OutputToConsole = "False"
s:Sc/velCurrElXFine/OutputType = "csv"
s:Sc/velCurrElXFine/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/velCurrElXFine/OnlyIncludeParticlesNamed = 1 "e-"
sv:Sc/velCurrElXFine/Report = 3 "Sum" "Standard_Deviation" "Histories" 
b:Sc/velCurrElXFine/Active="True"
s:Sc/velCurrElXFine/direction = "x"

# Current Electron Y Fine
s:Sc/velCurrElYFine/Quantity = "velocityCurrent"
s:Sc/velCurrElYFine/Component = "WaterGridFine"
i:Sc/velCurrElYFine/XBins = Par/FineXBins
i:Sc/velCurrElYFine/YBins = Par/FineYBins
i:Sc/velCurrElYFine/ZBins = Par/FineZBins
b:Sc/velCurrElYFine/OutputToConsole = "False"
s:Sc/velCurrElYFine/OutputType = "csv"
s:Sc/velCurrElYFine/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/velCurrElYFine/OnlyIncludeParticlesNamed = 1 "e-"
sv:Sc/velCurrElYFine/Report = 3 "Sum" "Standard_Deviation" "Histories" 
b:Sc/velCurrElYFine/Active="True"
s:Sc/velCurrElYFine/direction = "y"

# Current Electron Z Fine
s:Sc/velCurrElZFine/Quantity = "velocityCurrent"
s:Sc/velCurrElZFine/Component = "WaterGridFine"
i:Sc/velCurrElZFine/XBins = Par/FineXBins
i:Sc/velCurrElZFine/YBins = Par/FineYBins
i:Sc/velCurrElZFine/ZBins = Par/FineZBins
b:Sc/velCurrElZFine/OutputToConsole = "False"
s:Sc/velCurrElZFine/OutputType = "csv"
s:Sc/velCurrElZFine/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/velCurrElZFine/OnlyIncludeParticlesNamed = 1 "e-"
sv:Sc/velCurrElZFine/Report = 3 "Sum" "Standard_Deviation" "Histories" 
b:Sc/velCurrElZFine/Active="True"
s:Sc/velCurrElZFine/direction = "z"

# Current Electron X Fine
s:Sc/angCurrElXFine/Quantity = "angularCurrent"
s:Sc/angCurrElXFine/Component = "WaterGridFine"
i:Sc/angCurrElXFine/XBins = Par/FineXBins
i:Sc/angCurrElXFine/YBins = Par/FineYBins
i:Sc/angCurrElXFine/ZBins = Par/FineZBins
b:Sc/angCurrElXFine/OutputToConsole = "False"
s:Sc/angCurrElXFine/OutputType = "csv"
s:Sc/angCurrElXFine/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/angCurrElXFine/OnlyIncludeParticlesNamed = 1 "e-"
sv:Sc/angCurrElXFine/Report = 3 "Sum" "Standard_Deviation" "Histories" 
b:Sc/angCurrElXFine/Active="True"
s:Sc/angCurrElXFine/direction = "x"

# Current Electron Y Fine
s:Sc/angCurrElYFine/Quantity = "angularCurrent"
s:Sc/angCurrElYFine/Component = "WaterGridFine"
i:Sc/angCurrElYFine/XBins = Par/FineXBins
i:Sc/angCurrElYFine/YBins = Par/FineYBins
i:Sc/angCurrElYFine/ZBins = Par/FineZBins
b:Sc/angCurrElYFine/OutputToConsole = "False"
s:Sc/angCurrElYFine/OutputType = "csv"
s:Sc/angCurrElYFine/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/angCurrElYFine/OnlyIncludeParticlesNamed = 1 "e-"
sv:Sc/angCurrElYFine/Report = 3 "Sum" "Standard_Deviation" "Histories" 
b:Sc/angCurrElYFine/Active="True"
s:Sc/angCurrElYFine/direction = "y"

# Current Electron Z Fine
s:Sc/angCurrElZFine/Quantity = "angularCurrent"
s:Sc/angCurrElZFine/Component = "WaterGridFine"
i:Sc/angCurrElZFine/XBins = Par/FineXBins
i:Sc/angCurrElZFine/YBins = Par/FineYBins
i:Sc/angCurrElZFine/ZBins = Par/FineZBins
b:Sc/angCurrElZFine/OutputToConsole = "False"
s:Sc/angCurrElZFine/OutputType = "csv"
s:Sc/angCurrElZFine/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/angCurrElZFine/OnlyIncludeParticlesNamed = 1 "e-"
sv:Sc/angCurrElZFine/Report = 3 "Sum" "Standard_Deviation" "Histories" 
b:Sc/angCurrElZFine/Active="True"
s:Sc/angCurrElZFine/direction = "z"
 
s:Sc/angCurrElXFine/OutputFile = "../../TOPAS_simulation_data/plate_experiment/angCurrElXFine" 
s:Sc/angCurrElYFine/OutputFile = "../../TOPAS_simulation_data/plate_experiment/angCurrElYFine" 
s:Sc/angCurrElZFine/OutputFile = "../../TOPAS_simulation_data/plate_experiment/angCurrElZFine" 
 
s:Sc/velCurrElXFine/OutputFile = "../../TOPAS_simulation_data/plate_experiment/velCurrElXFine" 
s:Sc/velCurrElYFine/OutputFile = "../../TOPAS_simulation_data/plate_experiment/velCurrElYFine" 
s:Sc/velCurrElZFine/OutputFile = "../../TOPAS_simulation_data/plate_experiment/velCurrElZFine" 