i:Ts/NumberOfThreads = 48

# --- World ----------------------------------------------------
s:Ge/World/Material  = "Vacuum"
d:Ge/World/HLX       = 1.0 m
d:Ge/World/HLY       = 1.0 m
d:Ge/World/HLZ       = 1.0 m
b:Ge/World/Invisible = "True"

# --- Water cube (10 cm side; half-lengths = 5 cm) --------------
s:Ge/Water/Type     = "TsBox"
s:Ge/Water/Parent   = "World"
s:Ge/Water/Material = "G4_WATER"
d:Ge/Water/HLX      = 5.0 cm
d:Ge/Water/HLY      = 5.0 cm
d:Ge/Water/HLZ      = 5.0 cm
d:Ge/Water/TransZ   = 10.0 cm     # move cube downstream so beam enters from +Z
b:Ge/Water/Invisible= "False"

# (Optional) make it easy to see in the viewer
s:Ge/Water/Color    = "white"

# --- A tiny, invisible component to anchor the beam ------------
#   Sources in TOPAS are placed at the center & orientation of an associated component.
s:Ge/BeamPos/Type     = "TsBox"
s:Ge/BeamPos/Parent   = "World"
s:Ge/BeamPos/Material = "Vacuum"
d:Ge/BeamPos/HLX      = 1.0 mm
d:Ge/BeamPos/HLY      = 1.0 mm
d:Ge/BeamPos/HLZ      = 1.0 mm
d:Ge/BeamPos/TransZ   = 0.0 cm
b:Ge/BeamPos/Invisible= "True"

# --- Physics (simple EM for photons) ---------------------------
sv:Ph/Default/Modules = 1 "g4em-standard_opt0"

# --- Photon beam -----------------------------------------------
s:So/Beam/Type                     = "Beam"
s:So/Beam/Component                = "BeamPos"  # emit along +Z of this component
s:So/Beam/BeamParticle             = "gamma"
d:So/Beam/BeamEnergy               = 6.0 MeV
s:So/Beam/BeamEnergyDistribution   = "SpectrumFromFile"
s:So/Beam/BeamEnergySpectrumFile   = "6MV_spectrum.txt"
s:So/Beam/BeamEnergyNormalization  = "Probability"
s:So/Beam/BeamPositionDistribution = "Flat"
d:So/Beam/BeamPositionSpreadX      = 2.0 mm
d:So/Beam/BeamPositionSpreadY      = 2.0 mm
s:So/Beam/BeamAngularDistribution  = "None"
i:So/Beam/NumberOfHistoriesInRun   = 10000     # increase for smoother stats
s:So/Beam/BeamPositionCutoffShape  = "Ellipse"
d:So/Beam/BeamPositionCutoffX      = 2.5 cm
d:So/Beam/BeamPositionCutoffY      = 2.5 cm

# --- (Optional) simple 3D viewer -------------------------------
b:Ts/UseQt              = "True"
s:Gr/View/Type          = "OpenGL"
b:Gr/View/Active        = "False"
b:Gr/View/HiddenLineRemovalForTrajectories = "True"
b:Gr/View/IncludeAxes   = "True"  # defaults to "False"
s:Gr/View/AxesComponent = "World"  # Component in which to center the axes. Defaults to World.
d:Gr/View/AxesSize      = 0.2 m  # size of axes

# --- Phantom child component to score in 
s:Ge/WaterGridPar/Type       = "TsBox"
s:Ge/WaterGridPar/Parent     = "Water"
s:Ge/WaterGridPar/Material   = "G4_WATER"
d:Ge/WaterGridPar/HLX        = Ge/Water/HLX cm
d:Ge/WaterGridPar/HLY        = Ge/Water/HLY cm
d:Ge/WaterGridPar/HLZ        = Ge/Water/HLZ cm
b:Ge/WaterGridPar/Invisible  = "False"
sc:Ge/WaterGridPar/DrawingStyle= "WireFrame"

# Shared bin parameters
i:Par/GridXBins = 50
i:Par/GridYBins = 50
i:Par/GridZBins = 50

# Dose on the mass-world grid
s:Sc/DoseGrid/Quantity                  = "DoseToWater"
s:Sc/DoseGrid/Component                 = "WaterGridPar"
i:Sc/DoseGrid/XBins = Par/GridXBins
i:Sc/DoseGrid/YBins = Par/GridYBins
i:Sc/DoseGrid/ZBins = Par/GridZBins
b:Sc/DoseGrid/OutputToConsole           = "False"
s:Sc/DoseGrid/OutputType                = "csv"
s:Sc/DoseGrid/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/DoseGrid/Report = 3 "Sum" "Standard_Deviation" "Histories" 